<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:UclOpen.Video;assembly=UclOpen.Video"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ffm="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SerialNumber" />
        <Property Name="PortName" />
        <Property Name="ExposureTime" />
        <Property Name="Gain" />
        <Property Name="Binning" />
        <Property Name="CountsPerRev" />
        <Property Name="WheelDiameterMm" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>metadata</Name>
        <Description>meta</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>BehaviorBoards</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
                    <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
                    <PortName>COM3</PortName>
                    <DumpRegisters>true</DumpRegisters>
                    <Heartbeat>Enabled</Heartbeat>
                    <EventsSubjectName>BehaviorEvents</EventsSubjectName>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>RunningWheel</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="beh:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="beh:CreateEnableEncodersPayload">
                            <beh:EnableEncoders>EncoderPort2</beh:EnableEncoders>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="beh:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="beh:CreateEncoderModePayload">
                            <beh:EncoderMode>Position</beh:EncoderMode>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="beh:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="beh:CreateEncoderResetPayload">
                            <beh:EncoderReset>EncoderPort2</beh:EncoderReset>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="CommandsSubjectName" Description="The name of the Subject that carries command messages for a specific behavior device" Category="Subjects" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>BehaviorCommands</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="EventsSubjectName" Description="The name of the Subject that carries event messages from a specific behavior device" Category="Subjects" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>BehaviorEvents</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:DelaySubscription">
                            <rx:DueTime>PT0.1S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="beh:Parse">
                          <harp:Register xsi:type="beh:AnalogData" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Encoder</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Difference">
                            <dsp:Order>1</dsp:Order>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name>ConvertSigned</scr:Name>
                          <scr:Expression>it &gt; 32768.0 ? it - 65536.0 : (it &lt; -32768.0 ? it + 65536.0 : it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:Accumulate" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="CountsPerRev" />
                          <Property Name="WheelDiameterMm" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>TicksToCentimeters</Name>
                          <Description>Converts steps on a quadrature encoder to a distance in cm, published to a Subject</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="CountsPerRev" Description="The number of steps recorded on the quadrature encoder in a full revolution" Category="Running Wheel" />
                              </Expression>
                              <Expression xsi:type="Divide">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                                  <Value>4096</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="WheelDiameterMm" Description="The diameter of the wheel, in millimetres" Category="Running Wheel" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="IntProperty">
                                  <Value>150</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Name>CircumferenceCm</scr:Name>
                                <scr:Expression>(it*Math.Pi)/10</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Value" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="FloatProperty">
                                  <Value>47.12389</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="2" Label="Source2" />
                              <Edge From="1" To="2" Label="Source3" />
                              <Edge From="2" To="7" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="8" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="WheelDistanceSubjectName" Description="The name of the Subject that carries the wheel distance in cm" Category="Subjects" />
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>WheelDistanceCm</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="3" Label="Source2" />
                        <Edge From="2" To="3" Label="Source3" />
                        <Edge From="3" To="5" Label="Source1" />
                        <Edge From="4" To="5" Label="Source2" />
                        <Edge From="5" To="8" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="6" To="9" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="19" Label="Source1" />
                        <Edge From="18" To="19" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai">
                    <Trigger0Frequency>50</Trigger0Frequency>
                    <Trigger1Frequency>50</Trigger1Frequency>
                    <BehaviorCommandsSubjectName>BehaviorCommands</BehaviorCommandsSubjectName>
                    <BehaviorEventsSubjectName>BehaviorEvents</BehaviorEventsSubjectName>
                    <Camera0TriggerEventsSubjectName>Camera0TriggerEvents</Camera0TriggerEventsSubjectName>
                    <Camera1TriggerEventsSubjectName>Camera1TriggerEvents</Camera1TriggerEventsSubjectName>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartCameras</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" Description="The serial port the Harp Behaviour Board is connected to" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="CountsPerRev" />
                    <Property Name="WheelDiameterMm" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="0" Label="Source1" />
                  <Edge From="7" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Gain" />
              <Property Name="ExposureTime" />
              <Property Name="SerialNumber" />
              <Property Name="Binning" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>TriggeredSpinnaker</Name>
              <Description>Inline replacement for UclOpen.Devices:TriggeredSpinnaker.bonsai. Trigger events are Harp Event messages only (the register-dump Read reply of Camera0Frame is not a trigger). The camera node takes them as input, i.e. UclOpen TriggeredSpinnaker.Generate&lt;TPayload&gt;: FrameID and Timestamp are copied inside the camera callback (reading the live ManagedChunkData after Release crashed Bonsai) and FrameID gaps are filled before frames are zipped with triggers, so a dropped frame no longer shifts later timestamps. ExposureTime is the configured value. The Timeout after the camera stops the workflow with &quot;The operation has timed out.&quot; if no frame arrives for 15 s, including the first one after Start, so a camera that gets no trigger pulses (trigger cable) is not mistaken for a recording.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="SerialNumber" />
                    <Property Name="ColorProcessing" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:TriggeredSpinnaker">
                      <spk:Index xsi:nil="true" />
                      <spk:SerialNumber />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <p1:ExposureTime>10000</p1:ExposureTime>
                      <p1:Gain>5</p1:Gain>
                      <p1:Binning>1</p1:Binning>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ExposureTime</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="ExposureTime" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="DoubleProperty">
                            <Value>10000</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1.Seconds as Seconds,
new(Item1.Value.Image as Image,
new(Item1.Value.ChunkData.FrameID as FrameID,
Item1.Value.ChunkData.Timestamp as Timestamp,
Item2 as ExposureTime,
Item1.Value.Image.Width as Width,
Item1.Value.Image.Height as Height) as ChunkData) as Value)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>FrameEvents</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ExposureTime" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timeout">
                      <rx:DueTime>PT15S</rx:DueTime>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="10" Label="Source1" />
                  <Edge From="10" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="4" Label="Source1" />
                  <Edge From="9" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.ChunkData.Height</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.ChunkData.Width</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="CountsPerRev" />
              <Property Name="WheelDiameterMm" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="6" To="0" Label="Source1" />
            <Edge From="7" To="0" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SubjectId" />
        <Property Name="SessionId" />
        <Property Name="Path" />
        <Property Name="TrialLengthMins" />
        <Property Name="TrackingThreshold" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SubjectId" />
              <Property Name="SessionId" />
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogController.bonsai">
              <SubjectId>t</SubjectId>
              <SessionId>1</SessionId>
              <Path />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvents</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FrameRate" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogVideo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TotalFrame</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>3000</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Image</Selector>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FormatFileName</Name>
                    <Description>Generates a log filename based on the input timestamp.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>VideoData_Camera</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>avi</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}\{1}.{2}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="6" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="FrameRate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="ffm:VideoWriter">
                      <ffm:FileName />
                      <ffm:Suffix>None</ffm:Suffix>
                      <ffm:Overwrite>true</ffm:Overwrite>
                      <ffm:FrameRate>50</ffm:FrameRate>
                      <ffm:OutputArguments>-loglevel error -nostats -c:v h264_qsv -preset veryfast -global_quality 20 -bf 0 -pix_fmt nv12</ffm:OutputArguments>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.ChunkData.Timestamp</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.ChunkData.FrameID</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.ChunkData.ExposureTime</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Mouse_centroid</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WheelDistanceCm</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1.Item1 as Seconds,
Item1.Item2 as Timestamp,
Item1.Item3 as FrameID,
Item1.Item4 as ExposureTime,
Item1.Item5 as MouseLocation,
Item2 as WheelDistance)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>FormatFileName</Name>
                    <Description>Generates a log filename based on the input timestamp.</Description>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>PathPrefix</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>LogData</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="StringProperty">
                            <Value>csv</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}\{1}.{2}</Format>
                          <Selector>Item1,Item2,Item3</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="6" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="6" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName />
                    <io:Append>false</io:Append>
                    <io:Overwrite>true</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>true</io:IncludeHeader>
                    <io:Selector />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Grayscale" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Threshold">
                      <cv:ThresholdValue>35</cv:ThresholdValue>
                      <cv:MaxValue>255</cv:MaxValue>
                      <cv:ThresholdType>BinaryInv</cv:ThresholdType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Centroid" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Mouse_centroid</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ThresholdValue" DisplayName="TrackingThreshold" Description="Pixels darker than this are treated as the mouse. Raise it for a lighter image or a lighter animal, lower it for a darker one." Category="Tracking" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT0.2S</rx:Interval>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SampleInterval">
                      <rx:Interval>PT0.2S</rx:Interval>
                    </Combinator>
                  </Expression>
                  </Nodes>
                <Edges>
                  <Edge From="27" To="24" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="11" Label="Source1" />
                  <Edge From="3" To="12" Label="Source1" />
                  <Edge From="3" To="13" Label="Source1" />
                  <Edge From="3" To="14" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="4" To="23" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="20" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source2" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="16" Label="Source1" />
                  <Edge From="12" To="16" Label="Source2" />
                  <Edge From="13" To="16" Label="Source3" />
                  <Edge From="14" To="16" Label="Source4" />
                  <Edge From="15" To="16" Label="Source5" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="22" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="4" To="28" Label="Source1" />
                  <Edge From="19" To="29" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TrialLengthMins" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>60</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int64">
                <Value>50</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TotalFrame</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TrackingThreshold" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>